PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant': '0', 'session': '01'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1680, 1050]
  color = Black
  expName = Experiment
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Routines
  Routine Outro
    TextComponent Outro_text
      letterHeight = .1
      startVal [time (s)] = 0.0
      text = This concludes the experiment.
      wrapWidth = 10
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro
    TextComponent Intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Listen or watch for what is being said.

        Select the option that best fits the stimulus.

        Press space to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Parameters
      Code Type = Py
      Begin Experiment:
        options = ["BA", "DA", "GA"]

        # Don't touch these unless you know what you're doing.
        debug = False
        win.recordFrameIntervals = False
        win.waitBlanking = False
  Routine Audio_Tuning
    CodeComponent Audio_test
      Code Type = Py
      Begin Experiment:
        accuracy = 0
        target_accuracy = .5
        noise_level = 0
        minimum_iterations = 10

        margin_of_error = .05
      Begin Routine:
        from psychopy import core
        import random

        output_stim = Audio_from_video_file

        def start_video(video_file, noise_level):
            output_stim.setMovie(video_file)
            output_stim.seek(0)
            output_stim.play()

            data = np.random.uniform(-1,1,44100)
            white_noise = sound.Sound("chatter.wav")
            white_noise.play()

            while output_stim.status != visual.FINISHED:
                audio_text.draw()
                output_stim.draw()
                win.flip()

            white_noise.stop()

        ## Setup Section
        iteration_count = 0
        target_met = False

        subject_audio_answers = [[] for x in range(len(options))]

        ## Experiment Section
        while iteration_count < minimum_iterations:
            # Select a stimulus from the list of files
            correct_answer_index = random.randint(0, len(options)-1)
            correct_answer = options[correct_answer_index]
            test_file = correct_answer + ".mov"
            correct_answer = correct_answer[0].lower()

            # Play the video
            start_video(test_file, noise_level)

            # Get response
            prompt.draw()
            win.flip()

            # Read a character
            c = event.waitKeys()
            if c[0] == correct_answer:
                subject_audio_answers[correct_answer_index].append(1)
                noise_level += 1
                accuracy += 1
            elif c[0] == 'space':
                break
            else:
                subject_audio_answers[correct_answer_index].append(0)
                noise_level -= 1
            iteration_count += 1
      End Routine:
        for index, option in enumerate(subject_audio_answers):
            try:
                print(options[index] + " average: %" + str(sum(option)/len(option) * 100))
            except:
                pass
    MovieComponent Audio_from_video_file
      backend = moviepy
      forceEndRoutine = False
      movie = GA.mov
      size = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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    TextComponent audio_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = Listen for audio.
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  Routine Video_Tuning
    CodeComponent Video_test
      Code Type = Py
      Begin Experiment:
        accuracy = 0
        target_accuracy = .5
        noise_level = 0
        minimum_iterations = 10

        margin_of_error = .05

        noise = visual.NoiseStim(
            win,
            noiseType="white",
            noiseElementSize=.1,
            opacity=.5,
            size=(2,2)
        )
      Begin Routine:
        from psychopy import core
        import random

        output_stim = video_stimulus

        def start_video(video_file, noise_level):
            output_stim.setMovie(video_file)
            output_stim.seek(0)
            output_stim.play()
            while output_stim.status != visual.FINISHED:
                output_stim.draw()
                noise.draw()
                win.flip()
                noise.updateNoise()

        ## Setup Section
        iteration_count = 0
        target_met = False

        subject_video_answers = [[] for x in range(len(options))]

        ## Experiment Section
        while iteration_count < minimum_iterations:
            # Select a stimulus from the list of files
            correct_answer_index = random.randint(0, len(options)-1)
            correct_answer = options[correct_answer_index]
            test_file = correct_answer + ".mov"
            correct_answer = correct_answer[0].lower()

            # Play the video
            start_video(test_file, noise_level)

            # Get response
            prompt.draw()
            win.flip()

            # Read a character
            c = event.waitKeys()
            if c[0] == correct_answer:
                subject_video_answers[correct_answer_index].append(1)
                noise_level += 1
                accuracy += 1
            elif c[0] == 'space':
                break
            else:
                subject_video_answers[correct_answer_index].append(0)
                noise_level -= 1
            iteration_count += 1
      End Routine:
        for index, option in enumerate(subject_video_answers):
            try:
                print(options[index] + " average: %" + str(sum(option)/len(option) * 100))
            except:
                pass
    MovieComponent video_stimulus
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = GA.mov
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    TextComponent prompt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
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      text:
        What was said:
        BA, DA, or GA?
        Press B, D, or G.
  Routine Intro_2
    TextComponent Intro_2_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Wait for the speaker to finish.
        Press b if the speaker says "BA".
        Press d if the speaker says "DA".
        Press g if the speaker says "GA".

        Press space to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Testing
    CodeComponent test_code
      Code Type = Py
      Begin Experiment:
        debug = True
        accuracy = 0
        target_accuracy = .5
        noise_level = 0
        minimum_iterations = 10

        margin_of_error = .05
      Begin Routine:
        from psychopy import core
        import random

        video_stim = test_video

        def show_test(video_file, audio_file, video_noise_level, audio_noise_level):
            video_stim.setMovie(video_file)
            video_stim.seek(0)
            video_stim.play()
            while video_stim.status != visual.FINISHED:
                video_stim.draw()
                noise.draw()
                win.flip()
                noise.updateNoise()

        ## Setup Section
        iteration_count = 0
        target_met = False

        subject_audio_answers = [[] for x in range(len(options))]

        ## Experiment Section
        while iteration_count < minimum_iterations:
            # Select a stimulus from the list of files
            correct_answer_index = random.randint(0, len(options)-1)
            correct_answer = options[correct_answer_index]
            test_file = correct_answer + ".mov"
            correct_answer = correct_answer[0].lower()

            # Play the video
            show_test(test_file, test_file, 0, noise_level)

            # Get response
            prompt.draw()
            win.flip()

            # Read a character
            c = event.waitKeys()
            if c[0] == correct_answer:
                subject_audio_answers[correct_answer_index].append(1)
                noise_level += 1
                accuracy += 1
            elif c[0] == 'space':
                break
            else:
                subject_audio_answers[correct_answer_index].append(0)
                noise_level -= 1
            iteration_count += 1
      End Routine:
        for index, option in enumerate(subject_audio_answers):
            try:
                print(options[index] + " average: %" + str(sum(option)/len(option) * 100))
            except:
                pass
    MovieComponent test_video
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      movie = BA.mov
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
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    TextComponent test_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0
      text = How many trials had speakers that did not match the video?
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  Routine Video_intro
    TextComponent video_intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        This marks the begining of the visual section.
        Watch the video and respond accordingly.

        Press space to begin.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Audio_intro
    TextComponent audio_intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        This marks the begining of the audio section.
        Listen to the audio and respond accordingly.

        Press space to begin.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_intro
  Routine Test_intro
    TextComponent intro_test_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 2
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      text:
        Now audio and video will be combined.
        Watch the video and respond accordingly.

        Press space to begin.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  Routine Intro_2
  Routine Video_intro
  Routine Video_Tuning
  Routine Audio_intro
  Routine Audio_Tuning
  Routine Test_intro
  Routine Testing
  Routine Outro
